# Generated by Configurator on Fri Nov 15 11:41:42 GMT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,XYStage,ASIStage,XYStage
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices
Property,XYStage,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

