# Generated by Configurator on Fri Dec 04 15:25:50 GMT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,E-709,PI_GCS_2,E-709
Device,PIZStage,PI_GCS_2,PIZStage

# Pre-init settings for devices
Property,E-709,Port,COM4
Property,PIZStage,Axis,Z
Property,PIZStage,Controller Name,E-709
Property,PIZStage,Invert travel range,0
Property,PIZStage,Limit_um,500.0000
Property,PIZStage,Stage,DEFAULT_STAGE

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Software
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,PIZStage,1

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,PIZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

