# Generated by Configurator on Thu Oct 03 12:53:16 BST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM3,SerialManager,COM3
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,XYStage,ASIStage,XYStage

# Pre-init settings for devices
Property,XYStage,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

