# Generated by Configurator on Tue Aug 16 10:23:47 BST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,E-709,PI_GCS_2,E-709
Device,PIZStage,PI_GCS_2,PIZStage
Device,XYStage,ASIStage,XYStage

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Software
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,E-709,Port,COM4
Property,PIZStage,Axis,Z
Property,PIZStage,Controller Name,E-709
Property,PIZStage,Invert travel range,0
Property,PIZStage,Limit_um,500.0000
Property,PIZStage,Stage,DEFAULT_STAGE
Property,XYStage,Port,COM5

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,PIZStage,1

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,PIZStage
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Cam
# Preset: CamPreset
ConfigGroup,Cam,CamPreset,HamamatsuHam_DCAM,Binning,1x1
ConfigGroup,Cam,CamPreset,HamamatsuHam_DCAM,Exposure,9.9970
ConfigGroup,Cam,CamPreset,HamamatsuHam_DCAM,PixelType,16bit
ConfigGroup,Cam,CamPreset,HamamatsuHam_DCAM,ScanMode,2


# Group: Z
# Preset: ZPreset
ConfigGroup,Z,ZPreset,PIZStage,HOMING,0
ConfigGroup,Z,ZPreset,PIZStage,Position,200.0000
ConfigGroup,Z,ZPreset,PIZStage,Velocity,25000.2500


# Group: ASI_XY
# Preset: XYPreset
ConfigGroup,ASI_XY,XYPreset,XYStage,Acceleration-AC(ms),100
ConfigGroup,ASI_XY,XYPreset,XYStage,JoyStick Fast Speed,60
ConfigGroup,ASI_XY,XYPreset,XYStage,JoyStick Slow Speed,5
ConfigGroup,ASI_XY,XYPreset,XYStage,MotorOnOff,On
ConfigGroup,ASI_XY,XYPreset,XYStage,Speed-S,0.5746



# PixelSize settings
# Resolution preset: 60x
ConfigPixelSize,60x,HamamatsuHam_DCAM,TransposeMirrorX,0
ConfigPixelSize,60x,HamamatsuHam_DCAM,TransposeMirrorY,0
ConfigPixelSize,60x,HamamatsuHam_DCAM,TransposeXY,0
ConfigPixelSize,60x,XYStage,Acceleration-AC(ms),100
ConfigPixelSize,60x,XYStage,Speed-S,0.5746
ConfigPixelSize,60x,XYStage,StepSizeX_um,0.0100
ConfigPixelSize,60x,XYStage,StepSizeY_um,0.0100
ConfigPixelSize,60x,Core,Camera,HamamatsuHam_DCAM
ConfigPixelSize,60x,Core,XYStage,XYStage
PixelSize_um,60x,0.1083
PixelSizeAffine,60x,0.1083,0.0,0.0,0.0,0.1083,0.0
# Resolution preset: 100x
ConfigPixelSize,100x,HamamatsuHam_DCAM,TransposeMirrorX,0
ConfigPixelSize,100x,HamamatsuHam_DCAM,TransposeMirrorY,0
ConfigPixelSize,100x,HamamatsuHam_DCAM,TransposeXY,1
ConfigPixelSize,100x,XYStage,Acceleration-AC(ms),100
ConfigPixelSize,100x,XYStage,Speed-S,0.5746
ConfigPixelSize,100x,XYStage,StepSizeX_um,0.0100
ConfigPixelSize,100x,XYStage,StepSizeY_um,0.0100
ConfigPixelSize,100x,Core,Camera,HamamatsuHam_DCAM
ConfigPixelSize,100x,Core,XYStage,XYStage
PixelSize_um,100x,0.065
PixelSizeAffine,100x,0.065,0.0,0.0,0.0,0.065,0.0

